WorkflowBuilder(Version=2.9.0)
GroupWorkflow SynchPulse
    Timer(DueTime=PT1S)
    -> Bonsai.Harp.SynchronizeTimestamp
    -> Take(Count=1) => #2
    BehaviorSubject<Bonsai.Harp.HarpMessage> SynchronizerCommands
    -> DelaySubscription(DueTime=PT1S) => #4
    #2, #4 -> Concat => #5
    ExternalizedMapping(PortName) => #6
    #5, #6 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
    -> PublishSubject SynchronizerEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> BehaviorSubject TimeStamp

    ExternalizedMapping(Lower, Upper)
    -> Defer
        ExternalizedMapping(Lower, Upper)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=5)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2.023S)
        -> WorkflowOutput
    -> Repeat
    -> MulticastSubject SynchPulse

    PublishSubject<System.Int64> SynchPulse
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
    -> MulticastSubject SynchronizerCommands => #17
    ExternalizedMapping(DueTime) => #18
    #17, #18 -> Delay(DueTime=PT0.01S)
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
    -> MulticastSubject SynchronizerCommands

GroupWorkflow Logging(Description="Log all relevant streams")
    ExternalizedMapping(Path)
    -> IncludeWorkflow(Path=Extensions\PathPrefix.bonsai, Path=C:\Data\IMOVA\Webcam)

    GroupWorkflow LogHarp
        Defer
            SubscribeSubject PathPrefix
            -> Add(Operand=StringProperty(Value=\)) => #1
            ExternalizedMapping(Value(DisplayName=DeviceName)) => #2
            #1, #2 -> Add(Operand=StringProperty(Value=Behavior))
            -> Add(Operand=StringProperty(Value=\))
            -> Take(Count=1)
            -> AsyncSubject DeviceFolderName

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=device.yml))
            -> Take(Count=1)
            -> AsyncSubject DeviceYamlFilename

            SubscribeSubject DeviceFolderName
            -> Add(Operand=StringProperty(Value=Behavior))
            -> Take(Count=1)
            -> AsyncSubject BinaryFilename

            ExternalizedMapping(Name(DisplayName=DeviceEvents, Description=TaskControlBehaviorEvents))
            -> SubscribeSubject SynchronizerEvents
            -> GroupBy(KeySelector=Address)
            -> SelectMany LogRegisters
                WorkflowInput Source1
                -> AsyncSubject Register

                SubscribeSubject BinaryFilename
                -> Take(Count=1) => #3
                SubscribeSubject Register
                -> MemberSelector(Selector=Key) => #5
                #3, #5 -> Zip
                -> Format(Format={0}_{1}.bin, Selector="Item1,Item2")
                -> AsyncSubject LogName

                SubscribeSubject Register
                -> Merge => #10
                SubscribeSubject LogName
                -> PropertyMapping(FileName) => #12
                #10, #12 -> Bonsai.Harp.MessageWriter
                  FileName=C:\Data\IMOVA\Keyboard\2025-08-07T15-18-31\Behavior\Behavior_35.bin
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FilterType=Include
                  MessageType=nil
                -> WorkflowOutput

            ExternalizedMapping(Path(DisplayName=DeviceYamlFile))
            -> Bonsai.IO.ReadAllText(Path=BehaviorBoard.yml) => #20
            SubscribeSubject DeviceYamlFilename
            -> PropertyMapping(Path) => #22
            #20, #22 -> Bonsai.IO.WriteAllText(Path=C:\Data\IMOVA\Keyboard\2025-08-07T15-18-31\Behavior\device.yml, Overwrite=false, Append=false)
        -> WorkflowOutput

    Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression:
        new(
        it as key,
        true as pressed)
    Bonsai.Windows.Input.KeyUp(Filter=None)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
      Expression:
        new(
        it as key,
        false as pressed)
    #4, #6 -> Merge
    -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #8
    IncludeWorkflow keystrokes.csv(Path=Extensions\FormatFileName.bonsai)
    -> PropertyMapping(FileName) => #10
    #8, #10 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="")
    -> WorkflowOutput

    SubscribeSubject Instructions
    -> IncludeWorkflow(Path=Extensions\Timestamp.bonsai) => #14
    IncludeWorkflow Instructions.csv(Path=Extensions\FormatFileName.bonsai)
    -> PropertyMapping(FileName) => #16
    #14, #16 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)

    SubscribeSubject EnableRecording
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany AudioRecorder
        ExternalizedMapping(Value(DisplayName=FileName))
        -> StringProperty(Value=Audio)
        -> Take(Count=1)
        -> AsyncSubject BaseFileName

        Bonsai.Audio.AudioCapture(DeviceName="Microphone Array (Realtek(R) Au", SampleRate=44100, SampleFormat=Mono16, BufferLength=10) => #4
        SubscribeSubject BaseFileName
        -> Format(Format={0}.wav, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Audio.wav(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #9
        #4, #9 -> Bonsai.Audio.AudioWriter(FileName="", Suffix=Timestamp, Buffered=true, Overwrite=false, SampleRate=44100)
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Timestamp => #13
        SubscribeSubject BaseFileName
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Audio.csv(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #18
        #13, #18 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #19
        SubscribeSubject EnableRecording
        -> Condition Disable => #21
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #19, #21 -> TakeUntil
        -> WorkflowOutput

    SubscribeSubject EnableRecording
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany VideoRecorder
        ExternalizedMapping(Value(DisplayName=FileName))
        -> StringProperty(Value=Video)
        -> Take(Count=1)
        -> AsyncSubject BaseFileName

        Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
        -> MulticastSubject Webcam => #5
        SubscribeSubject BaseFileName
        -> Format(Format={0}.avi, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Video.avi(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #10
        #5, #10 -> Bonsai.Vision.VideoWriter
          FileName=""
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Timestamp => #14
        SubscribeSubject BaseFileName
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(Name)
        -> IncludeWorkflow Video.csv(Path=Extensions\FormatFileName.bonsai)
        -> PropertyMapping(FileName) => #19
        #14, #19 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #20
        SubscribeSubject EnableRecording
        -> Condition Disable => #22
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #20, #22 -> TakeUntil
        -> WorkflowOutput

GroupWorkflow Subjects
    StringProperty(Value="")
    -> PublishSubject Instructions

    BooleanProperty(Value=true)
    -> PublishSubject EnableStart

    BooleanProperty(Value=false)
    -> PublishSubject EnableRecording

    BooleanProperty(Value=false)
    -> PublishSubject EnableRepeat

    IntProperty(Value=0)
    -> PublishSubject Timer

GroupWorkflow UI
    SubscribeSubject Instructions
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 27.8571434pt", Text="Chose Repeat or Next Task")
    -> VisualizerMapping => #3
    BehaviorSubject<OpenCV.Net.IplImage> Webcam
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #5
    #3, #5 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles(RowStyle(SizeType=Absolute, Height=400)), CellSpans="")
    -> VisualizerMapping => #7
    SubscribeSubject EnableStart
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it))
    -> Bonsai.Gui.ButtonBuilder Start(Enabled=false, Visible=false, Font="Microsoft Sans Serif, 26.1428585pt, style=Bold", Text=Start)
    -> PublishSubject Start
    -> VisualizerMapping => #12
    SubscribeSubject Timer
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 48pt", Text=0)
    -> VisualizerMapping => #17
    SubscribeSubject EnableRecording
    -> PropertyMapping(Visible(Selector=it), Enabled(Selector=it)) => #19
    #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=false
      Visible=false
      ColumnCount=2
      RowCount=1
      ColumnStyles(ColumnStyle(SizeType=Percent, Width=100), ColumnStyle(SizeType=Absolute, Width=200))
      RowStyles=""
      CellSpans=""
    -> VisualizerMapping => #21
    Bonsai.Gui.ButtonBuilder Repeat(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 26.1428585pt, style=Bold", Text=Repeat)
    -> PublishSubject Repeat
    -> VisualizerMapping => #24
    Bonsai.Gui.ButtonBuilder Finish(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 26.1428585pt, style=Bold", Text=Finish)
    -> PublishSubject Finish
    -> VisualizerMapping => #27
    #24, #27 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #29
    #12, #21, #29 -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 27.8571434pt", Text="")
    -> VisualizerMapping => #31
    #7, #31 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Absolute, Height=400)), CellSpans="")
    -> WorkflowOutput
-> Bonsai.Design.VisualizerWindow(Visible=true, Location(X=100, Y=100), Size(Width=1000, Height=600), WindowState=Normal)

Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value: In this task we will ask you to screw up your eyes as tight as possible for 2 seconds.  Then open and close your eyes widely and deliberately over the remaining time.
    -> MulticastSubject Instructions
-> SelectMany "Eyelid Task"
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=12) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        Screw up your eyes as tight as you can for 2 seconds.
        Then, open and close your eyes until the timer finishes.
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="Chose Repeat or Next Task")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #9
SubscribeSubject Finish => #10
#9, #10 -> TakeUntil => #11
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        Please open your mouth wide and hold open for 2 seconds.
        Then open and close your mouth as wide as you can until the timer finishes.
    -> MulticastSubject Instructions
-> SelectMany MouthOpenTask
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=12) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty
      Value:
        Please open your mouth wide and hold open for about two seconds.
        Then
        Close and open your mouth as wide as you can until we say stop
        Start
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="Chose Repeat or Next Task")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #10
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #12
    #10, #12 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #16
SubscribeSubject Finish => #17
#16, #17 -> TakeUntil => #18
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty(Value=" Please 'purse your lips' and hold the pose for a few seconds!")
    -> MulticastSubject Instructions
-> SelectMany "PurseLip "
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=4) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty(Value="Please purse your lips and hold")
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="Chose Repeat or Next Task")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #10
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #12
    #10, #12 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #23
SubscribeSubject Finish => #24
#23, #24 -> TakeUntil => #25
Timer(DueTime=PT0S)
-> SelectMany Instruction
    SubscribeSubject Start
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1

    BooleanProperty(Value=true)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRepeat

    ExternalizedMapping(Value)
    -> StringProperty
      Value:
        This is to see whether you can keep a consistant posture with your tongue.
        Please stick out your tongue and try and keep out for the full 10 seconds.
    -> MulticastSubject Instructions
-> SelectMany TongueOut
    WorkflowInput Source1

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRecording

    Timer(DueTime=PT0S, Period=PT1S) => #5
    ExternalizedMapping(Value(DisplayName="Time(s)"))
    -> IntProperty(Value=11) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2-it.Item1
    -> MulticastSubject Timer
    -> TakeWhile
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> TakeLast(Count=1)
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=instructions))
    -> StringProperty(Value="Please stick out your tongue for 10 seconds\n")
    -> MulticastSubject Instructions
-> SelectMany End?_Repeat?
    WorkflowInput Source1

    StringProperty(Value="Chose Repeat or Next Task")
    -> MulticastSubject Instructions

    BooleanProperty(Value=false)
    -> MulticastSubject EnableStart

    BooleanProperty(Value=false)
    -> MulticastSubject EnableRecording

    BooleanProperty(Value=true)
    -> MulticastSubject EnableRepeat

    SubscribeSubject Repeat
    -> Disable BooleanProperty(Value=true) => #10
    Disable SubscribeSubject Finish
    -> Disable BooleanProperty(Value=false) => #12
    #10, #12 -> Disable Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Repeat => #30
SubscribeSubject Finish => #31
#30, #31 -> TakeUntil => #32
#11, #18, #25, #32 -> Concat
-> WorkflowOutput
